system:
    electron:
        current: 1.0000000000000002e-12
        detector_mode: SecondaryElectrons
        detector_type: ETD
        eucentric_height: 0.0039
        voltage: 2000
    ion:
        current: 2.0000000000000002e-11
        detector_mode: SecondaryElectrons
        detector_type: ETD
        eucentric_height: 0.0165
        plasma_gas: Argon
        voltage: 30000
    ip_address: localhost
    manufacturer: Thermo
    stage:
        needle_stage_height_limit: 0.0037
        pre_tilt: 27
        rotation_flat_to_electron: 49
        rotation_flat_to_ion: 229
        tilt_flat_to_electron: 0
        tilt_flat_to_ion: 52
user:
    imaging:
        autocontrast: true
        beam_type: ELECTRON
        dwell_time: 1.0e-06
        gamma: false
        hfw: 0.00015
        imaging_current: 2.0000000000000002e-11
        resolution:
        - 1536
        - 1024
        save: false
    milling:
        dwell_time: 1.0e-06
        milling_current: 2.0e-09
        rate: 3.0000000000000004e-09
        spot_size: 5.0000000000000004e-08
